PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = Sarah
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Routines
  Routine trial
    ImageComponent image
      image [set every repeat] = $images
      size = (0.5, 0.5)
      startVal [time (s)] = 5
      stopVal [duration (s)] = 1
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    CodeComponent stim_code
      Code Type = Auto->JS
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      Begin Experiment:
        #By: Kianoosh Hosseini at NDCLab FIU
        #1
        import serial
        import time
        import threading

        Connected = True

        def ReadThread(port):
            while Connected:
                if port.inWaiting() > 0:
                    print ("0x%X"%ord(port.read(1)))

        port = serial.Serial('COM3')
        thread = threading.Thread(target=ReadThread, args=(port,))
        thread.start()
        port.write([0xFF])
      Begin Routine:
        #2
        pulse_started = False
        pulse_ended = False
      Each Frame:
        #3
        if image.status == STARTED and not pulse_started:
            port.write([0x01]) #sends "S1" as a stimulus trigger!
            pulse_start_time = globalClock.getTime()
            pulse_started = True
        if pulse_started and not pulse_ended:
            if globalClock.getTime() - pulse_start_time >= 0.005:
                #port.write([0x01])
                pulse_ended = True
      End Experiment:
        #5
        port.close()
      End Routine:
        #4
        port.write([0xFF])
        Connected = False
        thread.join(1.0)
Flow
  LoopInitiator trials loopType="TrialHandler"
    conditions = [{'images': 'images/target.png'}]
    conditionsFile = conditions.xlsx
    loopType = random
    nReps = 180
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    Routine trial
  LoopTerminator trials
